PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = ssvep
  Units = height
  Screen = 1
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Routines
  Routine calibration_start
    CodeComponent send_calib_start
      Begin Routine:
        sendEvent("startPhase.cmd","calibrate")

        # wait for matlab sigprocbuffer to start up and report it's ready
        # (it's slow to start)
        recording_started = waitnewevents("calibrate",1000)
    TextComponent blank_2
      stopVal [duration (s)] = $blank_delay
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine start_guessing
    CodeComponent send_testing_start
      Begin Routine:
        #sendEvent("startPhase.cmd","testing")
        sendEvent("startPhase.cmd","contfeedback")
    TextComponent blank_4
      stopVal [duration (s)] = $blank_delay
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Checkers
    CodeComponent color_boss
      Each Frame:
        color1 = color_for_frame(15)
        color2 = color_for_frame(20)
        color3 = color_for_frame(30)
        color4 = color_for_frame(10)


        dbgFrameN = frameN
    PolygonComponent stim1
      fillColor [set every frame] = $color1
      stopVal [duration (s)] = 5
      pos = $[low_x, hi_y]
      lineWidth = 7
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = $blinky_size
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    PolygonComponent stim2
      fillColor [set every frame] = $color2
      stopVal [duration (s)] = 5
      pos = $[hi_x, hi_y]
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = $blinky_size
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    PolygonComponent stim3
      fillColor [set every frame] = $color3
      stopVal [duration (s)] = 5
      pos = $[low_x, low_y]
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = $blinky_size
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    PolygonComponent stim4
      fillColor [set every frame] = $color4
      stopVal [duration (s)] = 5
      pos = $[hi_x, low_y]
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = $blinky_size
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    TextComponent feedback
      text [set every frame] = $feedback_line
      stopVal [duration (s)] = 5
      pos = $feedback_pos
      startVal [time (s)] = 0.0
      letterHeight = $feedback_size
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    TextComponent dbg_feedback
      text [set every repeat] = $(pw_guess, predictions)
      stopVal [duration (s)] = 5
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    CodeComponent get_guess_event
      Begin Experiment:
        pw_guess = ""
        predictions = []
        pw_chars_to_guess = 4
        feedback_line = pw_chars_to_guess * "_ "
      End Routine:
        guessEvt = waitnewevents("classifier.prediction",500)

        print '---------------'
        print guessEvt

        if guessEvt is None:
          this_guess='?'

        else:
          # handle multiple predictions, get the most recent one
          if (len(guessEvt) > 0):
            guessEvt = guessEvt[-1]

          predictions=guessEvt.value

          maxval = -100000000
          max_idx = None
          for i, item in enumerate(predictions):
            if item > maxval :
                max_idx = i
                maxval  = item

          this_guess = max_idx

        pw_guess += str(this_guess)

        # update with number of guesses we processed
        # produces _ _ _ _ -> X _ _ _ -> X X _ _ -> etc

        feedback_line = \
          (                      len(pw_guess)  * "X ") + \
          ( (pw_chars_to_guess - len(pw_guess)) * "_ ")
  Routine Instuction
    CodeComponent code_setup
      Begin Experiment:
        def color_for_frame(herz):
          period = 60/herz

          color = [-1,-1,-1]

          if frameN % period < 0.5*period:
            color = [1,1,1]
          return color


        def highlight(which_button):
          if which_button != button:
            return [0,0,0]
          else:
            color = [-1,1,-1]
            if frameN > 30:
              color = [0,0,0]
            return color


        # blinky square settings
        low_x = -0.6
        hi_x  =  0.6
        low_y = -0.1
        hi_y  =  0.3
        blinky_size = [0.3, 0.15]

        # feedback
        feedback_size = 0.1
        feedback_pos  = [0, 0]

        blank_delay = 0.5
    CodeComponent connect_to_buffer
      Begin Experiment:
        # buffer_bci Handling the requered imports
        import sys
        import time
        sys.path.append("../../dataAcq/buffer/python/")
        from FieldTrip import Client, Event
        from time import sleep

        # buffer_bci Connecting to the buffer.
        host = 'localhost'
        port = 1972
        ftc = Client()
        hdr = None;
        while hdr is None :
            print 'Trying to connect to buffer on %s:%i ...'%(host,port)
            try:
                ftc.connect(host, port)
                print '\nConnected - trying to read header...'
                hdr = ftc.getHeader()
            except IOError:
                pass
            if hdr is None:
                print 'Invalid Header... waiting'
                time.sleep(1)
            else:
                print hdr
                print hdr.labels
        # buffer_bci Defining a usefull helper functions

        def sendEvent(eventType, eventValue):
            e = Event()
            e.type = eventType
            e.value = eventValue
            nSamples,nEvents=ftc.poll()
            e.sample = nSamples
            ftc.putEvents(e)

        procnEvents=0
        def waitnewevents(evtype, timeout_ms=1000,verbose = True):
            """Function that blocks until a certain type of event is recieved.
                evttype defines a list of type-strings, recieving any of these event types will
                termintes the block.  Only the first such matching event is returned
            """
            global ftc, nEvents, nSamples
            global procnEvents
            start = time.time()
            nSamples,nEvents=ftc.poll()
            elapsed_ms = 0

            if verbose:
                print "Waiting for event " + str(evtype) + " with timeout_ms " + str(timeout_ms)

            evt=None
            while elapsed_ms < timeout_ms and evt is None:
                nSamples, nEvents2 = ftc.wait(-1,procnEvents, timeout_ms - elapsed_ms)

                if nEvents != nEvents2: # new events to process
                    procnEvents = nEvents2
                    evts = ftc.getEvents((nEvents, nEvents2 -1))
                    evts = filter(lambda x: x.type in evtype,evts)
                    if len(evts) > 0:
                        evt=evts
                elapsed_ms = (time.time() - start)*1000
                nEvents = nEvents2
            return evt
    TextComponent instruction_calib
      stopVal [duration (s)] = 10
      startVal [time (s)] = $blank_delay
      letterHeight = 0.05
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      text:
        Please look at the squares
        highlighted in green.

        Count the times the square flashes
        until a new square is highlighted.
    TextComponent hit_space_2
      text = hit space to continue
      stopVal [duration (s)] = 10
      pos = [0, -0.3]
      startVal [time (s)] = $blank_delay
      letterHeight = 0.03
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    KeyboardComponent await_space_2
      stopVal [duration (s)] = 10.5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Welcome
  Routine delay
    TextComponent look_at_green
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Look at the
        blinky highlighted
        in green
  Routine Done
    CodeComponent decide_outcome
      Begin Routine:
        outcome_color = [1,-1,-1]

        if (pw_guess == "0123"):
          outcome_color = [-1,1,-1]
    CodeComponent stop_testing
      Begin Routine:
        sendEvent("testing","end")
    PolygonComponent outcome
      fillColor [set every repeat] = $outcome_color
      stopVal [duration (s)] = 5
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.05
      size = [0.5, 0.5]
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    TextComponent dbg_pw_guess
      text [set every repeat] = $pw_guess
      stopVal [duration (s)] = 5
      pos = [0, -0.3]
      startVal [time (s)] = 0.1
      letterHeight = 0.1
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  Routine highlight
  Routine Checkers_calib
    CodeComponent buffer_sync_calib
      Begin Routine:
        sendEvent("stimulus.target", str(button))
      End Routine:
        sendEvent("calibration_stop", button)
    CodeComponent color_boss_calib
      Each Frame:
        color1 = color_for_frame(15)
        color2 = color_for_frame(20)
        color3 = color_for_frame(30)
        color4 = color_for_frame(10)


        dbgFrameN = frameN


        line_color_1 = highlight(1)
        line_color_2 = highlight(2)
        line_color_3 = highlight(3)
        line_color_4 = highlight(4)
    PolygonComponent stim1_calib
      fillColor [set every frame] = $color1
      stopVal [duration (s)] = 3
      pos = $[low_x, hi_y]
      lineWidth = 9
      lineColor [set every frame] = $line_color_1
      startVal [time (s)] = 0.0
      size = $blinky_size
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    PolygonComponent stim2_calib
      fillColor [set every frame] = $color2
      stopVal [duration (s)] = 3
      pos = $[hi_x, hi_y]
      lineWidth = 9
      lineColor [set every frame] = $line_color_2
      startVal [time (s)] = 0.0
      size = $blinky_size
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    PolygonComponent stim3_calib
      fillColor [set every frame] = $color3
      stopVal [duration (s)] = 3
      pos = $[low_x, low_y]
      lineWidth = 9
      lineColor [set every frame] = $line_color_3
      startVal [time (s)] = 0.0
      size = $blinky_size
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    PolygonComponent stim4_calib
      fillColor [set every frame] = $color4
      stopVal [duration (s)] = 3
      pos = $[hi_x, low_y]
      lineWidth = 9
      lineColor [set every frame] = $line_color_4
      startVal [time (s)] = 0.0
      size = $blinky_size
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    TextComponent debug_calib
      text [set every frame] = $(dbgFrameN, line_color_1, button)
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.002
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    TextComponent feedback_calib
      text = _ _ _ _
      stopVal [duration (s)] = 3
      pos = $feedback_pos
      startVal [time (s)] = 0.0
      letterHeight = $feedback_size
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  Routine get_guess
  Routine calibration_end
    CodeComponent send_calib_end
      End Routine:
        sendEvent("calibrate","end")
        time.sleep(5)
        sendEvent("startPhase.cmd","train")
    TextComponent blank_3
      stopVal [duration (s)] = blank_delay
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instruction_pw
    TextComponent instruct_password
      stopVal [duration (s)] = 25
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
           Think-To-Unlock

          Please look at the
           flashing buttons
        to enter your password
Flow
  LoopInitiator skip_train loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine Instuction
    Routine calibration_start
    LoopInitiator calibrations loopType="TrialHandler"
      conditionsFile = calibration.csv
      loopType = random
      nReps = 10
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      conditions:
        [{'button': 1},
        {'button': 2},
        {'button': 3},
        {'button': 4}]
      Routine Checkers_calib
    LoopTerminator calibrations
    Routine calibration_end
    Routine instruction_pw
  LoopTerminator skip_train
  Routine start_guessing
  LoopInitiator pw_guesses loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine Checkers
  LoopTerminator pw_guesses
  Routine Done
