PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = Zinnen_sjabloon_wbw_pauze
  Units = use prefs
  Screen = 1
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Routines
  Routine pause_after_question
    TextComponent text_5
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine big_pause
    CodeComponent code_4
      End Routine:
        time.sleep(10)
        sendEvent("startPhase.cmd","training")
  Routine pause
    TextComponent text_3
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine start_round
  Routine trial
    TextComponent Sentence
      text [set every frame] = $Word3
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    CodeComponent set_trigger
      Begin Experiment:
        #from psychopy import parallel
        #parallel.setPortAdress(#)
      Begin Routine:
        #parallel.setData()
      End Routine:
        #parallel.setData(0)
  Routine fixation
    TextComponent text_2
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_7
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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  Routine question
    TextComponent text_4
      text [set every repeat] = $Question
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = $Response
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      discard previous = False
      startVal [time (s)] = 0.1
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  Routine startCalibrate
    CodeComponent code_3
      Begin Routine:
        sendEvent("startPhase.cmd","calibrate")
  Routine introduction
    TextComponent text_8
      text [set every repeat] = $IntroText1
      startVal [time (s)] = 0.0
      font = Verdana
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine word4
    TextComponent Sentence_4
      text [set every frame] = $Word4
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_12
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    CodeComponent set_trigger_4
      Begin Experiment:
        #from psychopy import parallel
        #parallel.setPortAdress(#)
      Begin Routine:
        #parallel.setData()
      End Routine:
        #parallel.setData(0)
  Routine set_triggers
    CodeComponent port_trigger_setting
      Begin Experiment:
        #from psychopy import parallel
        #parallel.setPortAdress(#)
      Begin Routine:
        #parallel.setData()
  Routine trial2
  Routine word3
    TextComponent Sentence_3
      text [set every frame] = $Word3
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_11
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    CodeComponent set_trigger_3
      Begin Experiment:
        #from psychopy import parallel
        #parallel.setPortAdress(#)
      Begin Routine:
        #parallel.setData()
      End Routine:
        #parallel.setData(0)
  Routine word2
    TextComponent Sentence_2
      text [set every frame] = $Word2
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_9
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    CodeComponent set_trigger_2
      Begin Experiment:
        #from psychopy import parallel
        #parallel.setPortAdress(#)
      Begin Routine:
        #parallel.setData()
      End Routine:
        #parallel.setData(0)
    CodeComponent code_2
      Begin Routine:
        sendEvent("stimulus.target", str(Condition))
  Routine pausebreak
    CodeComponent code
      Begin Routine:
        sendEvent("calibrate","end")
      Each Frame:
        if ExperimentLoop.thisTrialN not in [2,2] :
            continueRoutine=False
    StaticComponent ISI
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
  Routine start
    TextComponent text_10
      startVal [time (s)] = 0.0
      font = Verdana
      letterHeight = 0.1
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      text:
        Als alles duidelijk is, kunt u het experiment starten.

        Succes!
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent connect_to_buffer
      Begin Experiment:
        # buffer_bci Handling the requered imports
        import sys
        import time
        sys.path.append("../../dataAcq/buffer/python/")
        from FieldTrip import Client, Event
        from time import sleep

        # buffer_bci Connecting to the buffer.
        host = 'localhost'
        port = 1972
        ftc = Client()
        hdr = None;
        while hdr is None :
            print 'Trying to connect to buffer on %s:%i ...'%(host,port)
            try:
                ftc.connect(host, port)
                print '\nConnected - trying to read header...'
                hdr = ftc.getHeader()
            except IOError:
                pass
            if hdr is None:
                print 'Invalid Header... waiting'
                time.sleep(1)
            else:
                print hdr
                print hdr.labels
        # buffer_bci Defining a usefull helper functions

        def sendEvent(eventType, eventValue):
            e = Event()
            e.type = eventType
            e.value = eventValue
            nSamples,nEvents=ftc.poll()
            e.sample=nSamples
            ftc.putEvents(e)

        procnEvents=0
        def waitnewevents(evtype, timeout_ms=1000,verbose = True):
            """Function that blocks until a certain type of event is recieved.
                evttype defines a list of type-strings, recieving any of these event types will
                termintes the block.  Only the first such matching event is returned
            """
            global ftc, nEvents, nSamples
            global procnEvents
            start = time.time()
            nSamples,nEvents=ftc.poll()
            elapsed_ms = 0

            if verbose:
                print "Waiting for event " + str(evtype) + " with timeout_ms " + str(timeout_ms)

            evt=None
            while elapsed_ms < timeout_ms and evt is None:
                nSamples, nEvents2 = ftc.wait(-1,procnEvents, timeout_ms - elapsed_ms)

                if nEvents != nEvents2: # new events to process
                    procnEvents = nEvents2
                    evts = ftc.getEvents((nEvents, nEvents2 -1))
                    evts = filter(lambda x: x.type in evtype,evts)
                    if len(evts) > 0:
                        evt=evts
                elapsed_ms = (time.time() - start)*1000
                nEvents = nEvents2
            return evt
  Routine word1
    TextComponent Sentence_5
      text [set every frame] = $Word1
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_13
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    CodeComponent set_trigger_5
      Begin Experiment:
        #from psychopy import parallel
        #parallel.setPortAdress(#)
      Begin Routine:
        #parallel.setData()
      End Routine:
        #parallel.setData(0)
Flow
  LoopInitiator Welcome loopType="TrialHandler"
    conditionsFile = DantroductionText.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'IntroText3': None, u'IntroText2': u'Druk een willekeurige knop om verder te gaan.', u'IntroText1': u'Welkom bij dit experiment.'},
      {u'IntroText3': u'Of niet.', u'IntroText2': u'Of u dat nu wilt.', u'IntroText1': u'U gaat zinnen lezen.'}]
    Routine introduction
  LoopTerminator Welcome
  Routine start
  Routine startCalibrate
  LoopInitiator ExperimentLoop loopType="TrialHandler"
    conditionsFile = Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Word4': u'Hause', u'Word1': u'Ich ', u'Word3': u'nach ', u'Condition': 0, u'Word2': u'gehe'},
      {u'Word4': u'Hause', u'Word1': u'Du ', u'Word3': u'nach ', u'Condition': 0, u'Word2': u'gehst'},
      {u'Word4': u'Hause', u'Word1': u'Er', u'Word3': u'nach ', u'Condition': 0, u'Word2': u'geht'},
      {u'Word4': u'Hause', u'Word1': u'Wir', u'Word3': u'nach ', u'Condition': 0, u'Word2': u'gehen'},
      {u'Word4': u'Lied', u'Word1': u'Ich ', u'Word3': u'ein', u'Condition': 1, u'Word2': u'singst'},
      {u'Word4': u'Lied', u'Word1': u'Du ', u'Word3': u'ein', u'Condition': 0, u'Word2': u'singst'},
      {u'Word4': u'Lied', u'Word1': u'Sie', u'Word3': u'ein', u'Condition': 0, u'Word2': u'singt'},
      {u'Word4': u'Lied', u'Word1': u'Wir', u'Word3': u'ein', u'Condition': 0, u'Word2': u'singen'},
      {u'Word4': u'laut', u'Word1': u'Ich ', u'Word3': u'sehr ', u'Condition': 0, u'Word2': u'lache'},
      {u'Word4': u'laut', u'Word1': u'Du ', u'Word3': u'sehr ', u'Condition': 1, u'Word2': u'lacht'},
      {u'Word4': u'laut', u'Word1': u'Er', u'Word3': u'sehr ', u'Condition': 0, u'Word2': u'lacht'},
      {u'Word4': u'laut', u'Word1': u'Wir', u'Word3': u'sehr ', u'Condition': 0, u'Word2': u'lachen'},
      {u'Word4': u'Loch', u'Word1': u'Ich ', u'Word3': u'ein ', u'Condition': 0, u'Word2': u'bohre'},
      {u'Word4': u'Loch', u'Word1': u'Du ', u'Word3': u'ein ', u'Condition': 0, u'Word2': u'bohrst'},
      {u'Word4': u'Loch', u'Word1': u'Sie', u'Word3': u'ein ', u'Condition': 1, u'Word2': u'bohre'}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
    Routine fixation
    Routine word1
    Routine pause
    Routine word2
    Routine pause
    Routine word3
    Routine pause
    Routine word4
    Routine pause
  LoopTerminator ExperimentLoop
  Routine pausebreak
  Routine big_pause
