PsychoPy2experiment version="1.79.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = simple_imagined_movement
  Units = use prefs
  Screen = 1
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Routines
  Routine pause
    TextComponent text_2
      text = Pause
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine feedback
    CodeComponent receiveEvent
      Begin Experiment:
        getFeedbackCounter = 0
      Begin Routine:
        feedback = geteventvalue("feedbackStimulusResponse" + str(getFeedbackCounter))
        getFeedbackCounter = getFeedbackCounter + 1
    TextComponent text_5
      text [set every repeat] = "Feedback " + $feedback
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine stimulus
    StaticComponent ISI_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent imagination_instruction_2
      text [set every repeat] = $instruction
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent sendEvent_2
      Begin Routine:
        sendEvent("stimulus", str(bodypart))
  Routine feedbackInstructions
    TextComponent text_4
      stopVal [duration (s)] = 3600
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Simple Imagined Movement Experiment

        During the trails imagine yourself vigerously shaking the indicated body part (left hand, right hand, left foot or right foot). After each trail the system's classification of the brain signals will be shown.

        Press <space> to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine trailStart
    TextComponent text
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $trailtext
    CodeComponent sendEvent
      Begin Routine:
        sendEvent("trailStart", trail)
  Routine stimulusFeedback
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent imagination_instruction
      text [set every repeat] = $instruction
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent sendEvent_3
      Begin Experiment:
        sendFeedbackCounter = 0
      Begin Routine:
        sendEvent("feedbackStimulus" + str(sendFeedbackCounter), "")
        sendFeedbackCounter = 0 + sendFeedbackCounter
  Routine Instructions
    TextComponent text_3
      stopVal [duration (s)] = 3600
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Simple Imagined Movement Experiment

        During the trails imagine yourself vigerously shaking the indicated body part (left hand, right hand, left foot or right foot).

        Press <space> to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    CodeComponent connectToBuffer
      Begin Experiment:
        # buffer_bci Handling the requered imports
        import sys
        import time
        sys.path.append("../../dataAcq/buffer/python/")
        from FieldTrip import Client, Event
        from time import sleep

        # buffer_bci Connecting to the buffer.
        host = 'localhost'
        port = 1972
        ftc = Client()
        hdr = None;
        while hdr is None :
            print 'Trying to connect to buffer on %s:%i ...'%(host,port)
            try:
                ftc.connect(host, port)
                print '\nConnected - trying to read header...'
                hdr = ftc.getHeader()
            except IOError:
                pass
            if hdr is None:
                print 'Invalid Header... waiting'
                time.sleep(1)
            else:
                print hdr
                print hdr.labels
        # buffer_bci Defining a usefull helper functions

        def sendEvent(eventType, eventValue):
            e = Event()
            e.type = eventType
            e.value = eventValue
            ftc.putEvents(e)

        def geteventvalue(event_type):
            for event in ftc.getEvents():
                if event.type == event_type:
                    return event.value

            start, nEvents = ftc.poll()
            stop = False

            while not stop:
                ftc.wait(-1,nEvents, 3*1000)
                event = ftc.getEvents([nEvents])[0]
                stop = event.type == event_type

            return event.value
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trails.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trailtext': u' Trail 1', 'trail': 1},
      {'trailtext': u' Trail 2', 'trail': 2}]
    Routine trailStart
    LoopInitiator stimuli loopType="TrialHandler"
      conditionsFile = stimulus_conditions.csv
      loopType = random
      nReps = 1
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      conditions:
        [{'bodypart': u'left_hand', 'instruction': u' Left Hand'},
        {'bodypart': u'right_hand', 'instruction': u' Right Hand'},
        {'bodypart': u'left_foot', 'instruction': u' Left Foot'},
        {'bodypart': u'right_foot', 'instruction': u' Right Foot'}]
      Routine stimulus
    LoopTerminator stimuli
    Routine pause
  LoopTerminator trials
  Routine feedbackInstructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stimulus_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'bodyPart': u'left_hand', 'instruction': u' Left Hand'},
      {'bodyPart': u'right_hand', 'instruction': u' Right Hand'},
      {'bodyPart': u'left_foot', 'instruction': u' Left Foot'},
      {'bodyPart': u'right_foot', 'instruction': u' Right Foot'}]
    Routine stimulusFeedback
    Routine feedback
  LoopTerminator trials_2
